<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="neurostate_hmm:InitDecoding.bonsai">
        <SampleRate>30000</SampleRate>
        <DownsampledSampleRate>500</DownsampledSampleRate>
        <FilterLowerBound>0.3</FilterLowerBound>
        <FilterUpperBound>200</FilterUpperBound>
        <WindowDuration>1.024</WindowDuration>
        <WindowStepDuration>0.04</WindowStepDuration>
        <LowFrequencyBound>1</LowFrequencyBound>
        <HighFrequencyBound>100</HighFrequencyBound>
        <Parameters_FN>Parameters.txt</Parameters_FN>
        <NumStates>2</NumStates>
        <NumSubstates>1</NumSubstates>
        <ObsDimension>2</ObsDimension>
        <Training_Data_FN />
        <ModelFN>ModelFitting\HMM_Model.pkl</ModelFN>
        <SequenceLength>100</SequenceLength>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>.venv</py:PythonHome>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>16</gl:Width>
          <gl:Height>12</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Minimized</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>100</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ClockPeriodTimespan</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Period" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT0.04S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>InitDecodingIndicator</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixReader">
          <dsp:Path>RawData\raw_ephys_traces.bin</dsp:Path>
          <dsp:Offset>0</dsp:Offset>
          <dsp:SampleRate>0</dsp:SampleRate>
          <dsp:ChannelCount>2</dsp:ChannelCount>
          <dsp:BufferLength>1200</dsp:BufferLength>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="neurostate_hmm:PreProcess.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="neurostate_hmm:Decoding.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertFromArray">
          <dsp:Size>
            <dsp:Width>0</dsp:Width>
            <dsp:Height>0</dsp:Height>
          </dsp:Size>
          <dsp:Depth>F64</dsp:Depth>
          <dsp:Channels>1</dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>Decoding/state_inferences.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>