<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p1="clr-namespace:neurostate_hmm;assembly=neurostate_hmm"
                 xmlns:p2="clr-namespace:Bonsai.ML;assembly=Bonsai.ML"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>16</gl:Width>
          <gl:Height>12</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Minimized</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>100</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT0.04S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>.venv</py:PythonHome>
          <py:ScriptPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\neurostate-hmm\main.py</py:ScriptPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PythonEngine</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetDataStreamingParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="IncomingSampleRate" />
              <Property Name="IncomingBufferLength" />
              <Property Name="IncomingBufferStepLength" />
              <Property Name="DownsampleFactor" />
              <Property Name="FilterType" />
              <Property Name="TransitionBandWidth" />
              <Property Name="Cutoff1" />
              <Property Name="Cutoff2" />
              <Property Name="NumChannels" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DataStreamingParameters">
                <p1:IncomingSampleRate>30000</p1:IncomingSampleRate>
                <p1:IncomingBufferLength>30000</p1:IncomingBufferLength>
                <p1:IncomingBufferStepLength>1200</p1:IncomingBufferStepLength>
                <p1:DownsampleFactor>30</p1:DownsampleFactor>
                <p1:NumChannels>1</p1:NumChannels>
                <p1:FilterType>BandPass</p1:FilterType>
                <p1:TransitionBandWidth>0.01</p1:TransitionBandWidth>
                <p1:Cutoff1>0.3</p1:Cutoff1>
                <p1:Cutoff2>200</p1:Cutoff2>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StreamingParameters</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PythonEngine</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoadModule</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateModule">
                <py:Name>FFTModule</py:Name>
                <py:ScriptPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\neurostate-hmm\main.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ResourceSubject">
        <Name>PythonModule</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateFFTObject</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateModelReference">
                <p2:Name>FFTobject</p2:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FFTobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ModelSavePath">
                <p1:SavePath />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LoadPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineFFTLoadPath">
                <p1:LoadPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\offline_modelfitting\saved_models\sim1fft.pkl</p1:LoadPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonClassName</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} = instantiateClass(cls={2}, {1}, {3})</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>FFTobject = instantiateClass(cls=OnlineFFT, save_path="", load_path="C:/Users/aborsa3/Documents/BonsaiCorticalState2026/offline_modelfitting/saved_models/sim2fft.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>FFTobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineFFTParameters">
                <p1:SampleRate>1000</p1:SampleRate>
                <p1:BufferSize>500</p1:BufferSize>
                <p1:NumChannels>2</p1:NumChannels>
                <p1:FLow>1</p1:FLow>
                <p1:FHigh>100</p1:FHigh>
                <p1:WindowType>hamming</p1:WindowType>
                <p1:LogScale>true</p1:LogScale>
                <p1:LogBase>10</p1:LogBase>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source4" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FFTObjectParameters</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreatePCAObject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateModelReference">
                <p2:Name>PCAobject</p2:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PCAobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ModelSavePath">
                <p1:SavePath />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LoadPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlinePCALoadPath">
                <p1:LoadPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\offline_modelfitting\saved_models\sim1pca.pkl</p1:LoadPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonClassName</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} = instantiateClass(cls={2}, {1}, {3})</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>PCAobject = instantiateClass(cls=OnlinePCA, save_path="", load_path="C:/Users/aborsa3/Documents/BonsaiCorticalState2026/offline_modelfitting/saved_models/sim2pca.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>PCAobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlinePCAParameters">
                <p1:InputDim>100</p1:InputDim>
                <p1:OutputDim>2</p1:OutputDim>
                <p1:NormOrder>1</p1:NormOrder>
                <p1:ZScoreFlag>true</p1:ZScoreFlag>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source4" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PCAObjectParameters</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateHSMMObject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateModelReference">
                <p2:Name>HSMMobject</p2:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HSMMobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ModelSavePath">
                <p1:SavePath />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LoadPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineHSMMLoadPath">
                <p1:LoadPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\offline_modelfitting\saved_models\sim1hmm.pkl</p1:LoadPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonClassName</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} = instantiateClass(cls={2}, {1}, {3})</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMobject = instantiateClass(cls=OnlineHSMM, save_path="", load_path="C:/Users/aborsa3/Documents/BonsaiCorticalState2026/offline_modelfitting/saved_models/sim2hmm.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineHSMMParameters">
                <p1:K>2</p1:K>
                <p1:R>1</p1:R>
                <p1:D>2</p1:D>
                <p1:MaxSequenceLength>100</p1:MaxSequenceLength>
                <p1:M>0</p1:M>
                <p1:Transitions>nb</p1:Transitions>
                <p1:Observations>gaussian</p1:Observations>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source4" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>HSMMObjectParameters</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>IsWorkflowInitialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StreamingParameters</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" Selector="IncomingSampleRate" />
          <Property Name="BufferLength" Selector="IncomingBufferStepLength" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixReader">
          <dsp:Path>RawData\raw_ephys_traces.bin</dsp:Path>
          <dsp:Offset>0</dsp:Offset>
          <dsp:SampleRate>30000</dsp:SampleRate>
          <dsp:ChannelCount>2</dsp:ChannelCount>
          <dsp:BufferLength>1200</dsp:BufferLength>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>IsWorkflowInitialized</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Filter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamingParameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" Selector="IncomingBufferLength" />
                <Property Name="Skip" Selector="IncomingBufferStepLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>15000</dsp:Count>
                <dsp:Skip>1200</dsp:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamingParameters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamingParameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferLength" Selector="DownsampledBufferLength" />
                <Property Name="Factor" Selector="DownsampleFactor" />
                <Property Name="SampleRate" Selector="IncomingSampleRate" />
                <Property Name="KernelLength" Selector="IncomingKernelLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Decimate">
                <dsp:Downsampling>LowPass</dsp:Downsampling>
                <dsp:BufferLength>500</dsp:BufferLength>
                <dsp:Factor>30</dsp:Factor>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:KernelLength>400</dsp:KernelLength>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamingParameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SampleRate" Selector="DownsampledSampleRate" />
                <Property Name="Cutoff1" Selector="Cutoff1" />
                <Property Name="Cutoff2" Selector="Cutoff2" />
                <Property Name="KernelLength" Selector="DownsampledKernelLength" />
                <Property Name="FilterType" Selector="FilterType" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FrequencyFilter">
                <dsp:SampleRate>1000</dsp:SampleRate>
                <dsp:Cutoff1>0.3</dsp:Cutoff1>
                <dsp:Cutoff2>200</dsp:Cutoff2>
                <dsp:KernelLength>400</dsp:KernelLength>
                <dsp:FilterType>BandPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExtractFrequency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth>F32</dsp:Depth>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>buffer</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FFTobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FFTObjectParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonLoopMethod1Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.{1}(buffer)</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>FFTobject.loop_transform(buffer)</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="it.Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>FFTobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineFFTOutputs" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="7" To="18" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Output</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExtractFeatures</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>buffer</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PCAobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PCAObjectParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonLoopMethod1Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.{1}(buffer)</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>PCAobject.loop_transform(buffer)</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="it.Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>PCAobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlinePCAOutputs" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Output</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodeStates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>buffer</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMObjectParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonLoopMethod1Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.{1}(buffer)</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMobject.loop_decode(buffer)</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="it.Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:OnlineHSMMDecodeOutputs" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CurrentStateBelief</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>