<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p1="clr-namespace:Bonsai.ML;assembly=Bonsai.ML"
                 xmlns:p2="clr-namespace:neurostate_hmm;assembly=neurostate_hmm"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>16</gl:Width>
          <gl:Height>12</gl:Height>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Minimized</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>100</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT0.04S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>.venv</py:PythonHome>
          <py:ScriptPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\neurostate-hmm\main.py</py:ScriptPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PythonEngine</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PythonEngine</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoadModule</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateModule">
                <py:Name>FFTModule</py:Name>
                <py:ScriptPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\neurostate-hmm\main.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:ResourceSubject">
        <Name>PythonModule</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateHSMMSampleObject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateModelReference">
                <p1:Name>HSMMsampleobject</p1:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HSMMsampleobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ModelSavePath">
                <p2:SavePath />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LoadPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMLoadPath">
                <p2:LoadPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\offline_modelfitting\saved_models\sim1hsmm.pkl</p2:LoadPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonClassName</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} = instantiateClass(cls={2}, {1}, {3})</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMsampleobject = instantiateClass(cls=OnlineHSMM, save_path="", load_path="C:/Users/aborsa3/Documents/BonsaiCorticalState2026/offline_modelfitting/saved_models/sim2hsmm.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMsampleobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMParameters">
                <p2:K>2</p2:K>
                <p2:R>1</p2:R>
                <p2:D>2</p2:D>
                <p2:MaxSequenceLength>100</p2:MaxSequenceLength>
                <p2:M>0</p2:M>
                <p2:Transitions>nb</p2:Transitions>
                <p2:Observations>gaussian</p2:Observations>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source4" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>HSMMSampleObjectParameters</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateHSMMDecodeObject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateModelReference">
                <p1:Name>HSMMdecodeobject</p1:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HSMMdecodeobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SavePath" Category="Model Info" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ModelSavePath">
                <p2:SavePath />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LoadPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMLoadPath">
                <p2:LoadPath>C:\Users\aborsa3\Documents\BonsaiCorticalState2026\offline_modelfitting\saved_models\sim1hsmm.pkl</p2:LoadPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonClassName</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0} = instantiateClass(cls={2}, {1}, {3})</Format>
              <Selector>Item1,Item2,Item3,Item4</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMdecodeobject = instantiateClass(cls=OnlineHSMM, save_path="", load_path="C:/Users/aborsa3/Documents/BonsaiCorticalState2026/offline_modelfitting/saved_models/sim2hsmm.pkl")</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMdecodeobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMParameters">
                <p2:K>2</p2:K>
                <p2:R>1</p2:R>
                <p2:D>2</p2:D>
                <p2:MaxSequenceLength>100</p2:MaxSequenceLength>
                <p2:M>0</p2:M>
                <p2:Transitions>nb</p2:Transitions>
                <p2:Observations>gaussian</p2:Observations>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source4" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>HSMMDecodeObjectParameters</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>IsWorkflowInitialized</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Clock</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SampleStates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>unused</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMsampleobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMSampleObjectParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonLoopMethod2Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.{1}()</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMsampleobject.loop_sample()</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="it.Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMsampleobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMSampleOutputs" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CurrentObservation</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CurrentSuperState</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CurrentSubState</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DecodeStates</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:ObserveOnGIL" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Set">
                <py:VariableName>buffer</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMdecodeobject</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HSMMDecodeObjectParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PythonLoopMethod1Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}.{1}(buffer)</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Script" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Exec">
                <py:Script>HSMMdecodeobject.loop_decode(buffer)</py:Script>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="VariableName" Selector="it.Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PythonModule</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Module" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:Get">
                <py:VariableName>HSMMdecodeobject</py:VariableName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:OnlineHSMMDecodeOutputs" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CurrentStateBelief</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="20" Label="Source2" />
      <Edge From="19" To="20" Label="Source3" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>